PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = Dell
  Screen = 1
  Units = height
  Use version = 3.1.5
  Window size (pixels) = [1920, 1080]
  color = $[0,0,0]
  colorSpace = hsv
  expName = Number_Letter_Task
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Routines
  Routine trial
    TextComponent NL_Pair
      letterHeight = 0.1
      pos [set every repeat] = $position
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $pair
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    KeyboardComponent trial_key_resp
      allowedKeys = 'f','j','d','k'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent number_reminder
      letterHeight = 0.05
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $num_reminder
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    TextComponent letter_reminder
      letterHeight = 0.05
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $lett_reminder
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  Routine feedback
    TextComponent fdbk_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $fdbk_msg
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent fdbk_cont
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $fdbk_cont_msg
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  Routine Ready
    TextComponent rdy_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $ready_msg
    KeyboardComponent rdy_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent rdy_cont
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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  Routine Gen_Instr
    TextComponent gen_instr_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        During this task, you will see a number-letter pair presented on the screen.

                Numbers 1 through 9.
                Letters A, E, G, I, K, M, R, and U.

        During the task, pairs will appear right away.
    KeyboardComponent gen_instr_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instr_cont
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE for more instructions.
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  Routine gen_instr_2
    TextComponent gen_instr_2_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this first part, pairs will appear on the top half of the screen.

        When you see a pair, decide if the number is odd or even.
    KeyboardComponent gen_instr_2_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instr_2_cont
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE for more instructions.
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Flow
  Routine Gen_Instr
  Routine gen_instr_2
  LoopInitiator Blocks loopType="TrialHandler"
    conditionsFile = NLT_Blocks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 1), ('cond_file', 'NLT_Block_1.xlsx'), ('ready_msg', 'Respond by pressing:\n        F if the number is odd\n        J if the number is even\n\nThere will be a cue at the top of the screen.'), ('fdbk_msg', 'Good work! \n\nIn this second part, number-letter pairs will only appear on the bottom half of the screen. \n\nDecide if the letter is a consonant or a vowel. '), ('fdbk_cont_msg', 'Press SPACE for more instructions.')]),
      OrderedDict([('block', 2), ('cond_file', 'NLT_Block_2.xlsx'), ('ready_msg', 'Respond by pressing…  \n        D if the letter is a consonant. \n        K if the letter is a vowel.\n\nRemember... \n        Consonants are G, K, M, and R.\n        Vowels are A, E, I, and U.\n\nThere will be a cue at the bottom of the screen.'), ('fdbk_msg', 'Good work! \n\nIn this third and final part, number-letter pairs will appear on the top and bottom of the screen. '), ('fdbk_cont_msg', 'Press SPACE for more instructions.')]),
      OrderedDict([('block', 3), ('cond_file', 'NLT_Block_3.xlsx'), ('ready_msg', 'If the pair appears in the top half…\n        Decide if the number is odd or even.\n\nIf the pair appears in the bottom half…\n        Decide if the letter is a consonant or a vowel. \n\nRespond by pressing \n        F if the number is odd\n        J if the number is even\n        D if the letter is a consonant \n        K if the letter is a vowel\n\nThere will be cues at the top and bottom of the screen.'), ('fdbk_msg', 'Good work! \n\nYou’ve finished this task.'), ('fdbk_cont_msg', 'Press SPACE to end.')])]
    Routine Ready
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $cond_file
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trials
    Routine feedback
  LoopTerminator Blocks
